name: salami
path: c:\Users\pcle0002\Documents\repos\salami\salami\salami
positions: []
settings:
    _align: true
    _milling: true
    _neutralise: true
    image:
    -   beam:
            beam_current: null
            beam_type: ELECTRON
            dwell_time: null
            hfw: null
            resolution: null
            shift: null
            stigmation: null
            voltage: null
            working_distance: null
        detector:
            brightness: null
            contrast: null
            mode: null
            type: null
        image:
            autocontrast: null
            beam_type: ELECTRON
            dwell_time: null
            gamma_enabled: null
            hfw: null
            label: null
            reduced_area: null
            resolution: null
            save: null
            save_path: null
    mill:
        milling:
            application_file: Si
            dwell_time: 1.0e-06
            hfw: 0.00015
            milling_current: 2.0e-11
            patterning_mode: Serial
            preset: 30 keV; UHR imaging
            rate: 0.003
            spot_size: 5.0e-08
        name: Milling Stage
        num: 0
        pattern:
            name: Rectangle
            point: null
            protocol: null
            required_keys:
            - width
            - height
            - depth
            - rotation
    n_steps: 10
    step_size: 1.5e-07
